---
API: 2.1
OpenSesame: 3.3.4a8
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family sans
set font_bold yes
set experiment_path "/home/tessa/Documents/MasterAI/Year2/UserModels/UserModels2020"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=24 html=yes show_if=always text="This is the end of the experiment, thank you for participating!<br /><br />Please mail your CSV file to: m.d.los@student.rug.nl<br /><br />Press any key to exit." x=0 y=0 z_index=0

define sketchpad Instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Welcome to the test!<br /><br /> Give the English translation of the Finnish word on the flashcard, and press enter.<br />It could be the case that you are presented with some Finnish words that you did not see during your study session, you can leave these words blank.<br /><br />During the test you will not receive feedback, but you will be shown your results afterwards.<br /><br />Press any key to start the test." x=0 y=0 z_index=0

define inline_script QA
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	var.start_time = trial_start_time
	
	# Get next fact from table
	prompt = var.question
	answer = var.answer
	
	# Show prompt
	my_canvas = Canvas()
	draw_flashcard()
	my_canvas.text(prompt, y = -82, font_size = 30)
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			var.rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		draw_flashcard()
		my_canvas.text(prompt, y = -82, font_size = 30)
		my_canvas.text(keyboard_response, y = 100)
		my_canvas.prepare()
		my_canvas.show()
	
	
	# Check if the response is correct
	var.key_response = keyboard_response
	var.correct = keyboard_response == answer
	
	if keyboard_response == answer:
		nr_of_correct_answers += 1
	
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	__end__
	___prepare__
	def draw_flashcard():
	    my_canvas.rect(-120,-130,240,95, color='black', fill = False)
	    my_canvas.rect(-119,-129,238,93, color='lavender', fill = True)
	__end__

define loop block_loop
	set source_file "wordlist_48.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 question maison
	setcycle 0 answer house
	setcycle 0 hint 1
	setcycle 0 long 1
	setcycle 1 question chat
	setcycle 1 answer cat
	setcycle 1 hint 0
	setcycle 1 long 0
	setcycle 2 question skoll
	setcycle 2 answer cheers
	setcycle 2 hint 1
	setcycle 2 long 0
	run trial

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run setup_correct_answers always
	run block_loop always
	run show_result always
	run End always

define inline_script facts_setup
	set description "Executes Python code"
	set _run ""
	___prepare__
	from collections import namedtuple
	
	Fact = namedtuple("Fact", "fact_id, question, answer, easy_or_hard")
	
	facts = [Fact(fact_id=1, question='käsi', answer='hand', easy_or_hard='easy'), Fact(fact_id=2, question='pää', answer='head', easy_or_hard='easy'), Fact(fact_id=3, question='ruma', answer='ugly', easy_or_hard='easy'), Fact(fact_id=4, question='vuosi', answer='year', easy_or_hard='easy'), Fact(fact_id=5, question='neljä', answer='four', easy_or_hard='easy'), Fact(fact_id=6, question='viisi', answer='five', easy_or_hard='easy'), Fact(fact_id=7, question='hyvä', answer='good', easy_or_hard='easy'), Fact(fact_id=8, question='olut', answer='beer', easy_or_hard='easy'), Fact(fact_id=9, question='lumi', answer='snow', easy_or_hard='easy'), Fact(fact_id=10, question='kenkä', answer='shoe', easy_or_hard='easy'), Fact(fact_id=11, question='kaula', answer='neck', easy_or_hard='easy'), Fact(fact_id=12, question='vaimo', answer='wife', easy_or_hard='easy'), Fact(fact_id=13, question='pitkä', answer='tall', easy_or_hard='easy'), Fact(fact_id=14, question='kova', answer='hard', easy_or_hard='easy'), Fact(fact_id=15, question='talo', answer='house', easy_or_hard='easy'), Fact(fact_id=16, question='pieni', answer='small', easy_or_hard='easy'), Fact(fact_id=17, question='vesi', answer='water', easy_or_hard='easy'), Fact(fact_id=18, question='kolme', answer='three', easy_or_hard='easy'), Fact(fact_id=19, question='kello', answer='clock', easy_or_hard='easy'), Fact(fact_id=20, question='paita', answer='shirt', easy_or_hard='easy'), Fact(fact_id=21, question='pilvi', answer='cloud', easy_or_hard='easy'), Fact(fact_id=22, question='lyhyt', answer='short', easy_or_hard='easy'), Fact(fact_id=23, question='ylpeä', answer='proud', easy_or_hard='easy'), Fact(fact_id=24, question='lapsi', answer='child', easy_or_hard='easy'), Fact(fact_id=25, question='rauhoittaa', answer='calm', easy_or_hard='hard'), Fact(fact_id=26, question='kiireinen', answer='busy', easy_or_hard='hard'), Fact(fact_id=27, question='naudanliha', answer='beef', easy_or_hard='hard'), Fact(fact_id=28, question='kalastaa', answer='fish', easy_or_hard='hard'), Fact(fact_id=29, question='sianliha', answer='pork', easy_or_hard='hard'), Fact(fact_id=30, question='vasikanliha', answer='veal', easy_or_hard='hard'), Fact(fact_id=31, question='yhdeksän', answer='nine', easy_or_hard='hard'), Fact(fact_id=32, question='vesisade', answer='rain', easy_or_hard='hard'), Fact(fact_id=33, question='vuorovesi', answer='tide', easy_or_hard='hard'), Fact(fact_id=34, question='maljakko', answer='vase', easy_or_hard='hard'), Fact(fact_id=35, question='kantapää', answer='heel', easy_or_hard='hard'), Fact(fact_id=36, question='runoilija', answer='poet', easy_or_hard='hard'), Fact(fact_id=37, question='hienostelija', answer='snob', easy_or_hard='hard'), Fact(fact_id=38, question='kateellisuus', answer='envy', easy_or_hard='hard'), Fact(fact_id=39, question='väsynyt', answer='tired', easy_or_hard='hard'), Fact(fact_id=40, question='sateinen', answer='rainy', easy_or_hard='hard'), Fact(fact_id=41, question='onnellinen', answer='happy', easy_or_hard='hard'), Fact(fact_id=42, question='aurinkoinen', answer='sunny', easy_or_hard='hard'), Fact(fact_id=43, question='suuttunut', answer='angry', easy_or_hard='hard'), Fact(fact_id=44, question='sairaanhoitaja', answer='nurse', easy_or_hard='hard'), Fact(fact_id=45, question='seitsemän', answer='seven', easy_or_hard='hard'), Fact(fact_id=46, question='kahdeksan', answer='eight', easy_or_hard='hard'), Fact(fact_id=47, question='päivänkakkara', answer='daisy', easy_or_hard='hard'), Fact(fact_id=48, question='hiekkaranta', answer='beach', easy_or_hard='hard')]
	__end__

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log count_trial
	log start_time
	log rt
	log correct
	log fact_id
	log question
	log answer
	log easy_or_hard

define inline_script setup_correct_answers
	set description "Executes Python code"
	set _run "nr_of_correct_answers = 0"
	set _prepare ""

define inline_script show_result
	set description "Executes Python code"
	___run__
	my_canvas.clear()
	my_canvas.text("You translated " + str(nr_of_correct_answers) + " of the 48 words correctly!", y = -40, font_size = 40)
	my_canvas.text("Press any key to continue.", y = 40, font_size = 40)
	my_canvas.prepare()
	my_canvas.show()
	
	my_keyboard = Keyboard()
	
	while my_keyboard.get_key() == None:
	    clock.sleep(10)
	    
	__end__
	set _prepare ""

define sequence trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run QA always
	run logger always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

